PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pitch_toj
  keyboardBackend = ioHub
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Routines
  Routine welcomeScreen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Welcome, thank you for participating in this experiment
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    TextComponent text_2
      disabled = True
      letterHeight = 0.03
      startVal [time (s)] = 4
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      text:
        This experiment has following instructions:

        In each trial there will be FOUR words.

        - At a time, a single word will be displayed on the screen.
        - First word (in yellow) is to be read aloud.
        - Other words are to be read silently.
        - Fourth word would accompany with a voice saying the same word
        - Determine if the audio of the voice was in sync with the word
        i.e., did the word was heard soon enough as it was displayed?
        - You'll answer in a yes or no.

        Press 'spacebar' when you are ready.

        Or ask the experimentar for any questions.
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4
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    TextboxComponent textbox
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.04
      size = (1, 0.5)
      startVal [time (s)] = 4
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      text:
        This experiment has following instructions:

        In each trial there will be FOUR words.

        At a time, a single word will be displayed on the screen.
        First word (in yellow) is to be read aloud.
        Other words are to be read silently.
        Fourth word, in red, would accompany with a voice.
        A brief fixation cross in between words is provided to aid your attention at the word location.

        The task is to determine(y/n) if the voice and the word were presented simaltaneously i.e., did the word was heard soon enough as it was displayed?

        Press 'spacebar' when you are ready.

        Or ask the experimentar for any questions.
  Routine practiceSesh
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    TextComponent practiceText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's do a practice trial.

        Press 'spacebar' when ready.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine firstWord
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    TextComponent firstW
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word1
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    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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  Routine secondWord
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    TextComponent secondW
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word2
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    PolygonComponent polygon_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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  Routine thirdWord
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    TextComponent thirdW
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word3
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    PolygonComponent polygon_3
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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  Routine fourthWord
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    TextComponent fourthW
      color = darkred
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word4
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    SoundComponent sound_1
      sound [set every repeat] = $path4
      startVal [time (s)] = $delay/1000
      stopVal [duration (s)] = 2
      syncScreenRefresh = False
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  Routine trialStart
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        countdown_duration = 3  # set the duration of the countdown in seconds
        countdown_timer = countdown_duration
        count_down= "3"
      Each Frame:
        if countdown_timer > 0:
            countdown_timer -= 1 / expInfo['frameRate']
            count_down = str(round(countdown_timer))
        else:
            count_down = "0"  # or any message when the countdown reaches zero
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Starting new trial in
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $count_down
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  Routine EndScreen
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        All trials have been completed.

        Thank you for participating
  Routine response
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Was the voice in heard as soon as the word was shown?

        Press 'y' for Yes or 'n' for No
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine experimentStart
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        import numpy as np
      Begin Routine:
        def counter_balance(df, available_sets_):
            #merge to create only two columns
            dfk = pd.DataFrame(columns=['word', 'path'])
            for i in range(1, 5):
                tempdf = pd.DataFrame(columns=['word', 'path'])
                tempdf['word'] = df[f'word{i}'].values
                tempdf['path'] = df[f'path{i}'].values
                dfk = pd.concat([dfk,tempdf])
            #removing words that start with n because \n is psychopy is next line
            dfk = dfk[~dfk['word'].str.startswith('n')]

            #sample_df from rhyming words
            sampled_df = df.loc[list(available_sets_)].sample(4)
            #update available_sets for next df
            available_sets_ = available_sets_ - set(sampled_df.index)

            #counterbalancing
            for _ in range (4):
                k = dfk.sample(4)
                new_row = pd.DataFrame([np.concatenate((k['path'].values, k['word'].values), axis=0)], columns=df.columns)
                sampled_df = pd.concat([sampled_df, new_row], ignore_index=True)
            sampled_df.sample(frac=1).reset_index(drop=True)
            sampled_df['delay'] = [0, 200, 400, 500, 550, 600, 800, 1000]
            return sampled_df, available_sets_


        df1 = pd.read_csv('setA.csv', index_col='set',skiprows=[13])
        df2 = pd.read_csv('setC.csv', index_col='set',skiprows=[13])
        df3 = pd.read_csv('setX.csv', index_col='set',skiprows=[13])
        available_sets_ = set(df1.index)
        df1s,available_sets_ = counter_balance(df1, available_sets_)
        df2s,available_sets_ = counter_balance(df2, available_sets_)
        df3s,available_sets_ = counter_balance(df3, available_sets_)
        df = pd.concat([df1s, df2s, df3s])
        df.reset_index().to_csv('stimuli.csv', index=False)
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great.
        Let's begin our main experiment!

        Press 'spacebar' when ready
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine trialEnd
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Response has been recorded.
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Flow
  Routine welcomeScreen
  Routine practiceSesh
  LoopInitiator practiceTrial loopType="TrialHandler"
    conditionsFile = sample.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('path1', 'audio\\set_12\\card_en-IN-Standard-A.wav'), ('path2', 'audio\\set_12\\yard_en-IN-Standard-A.wav'), ('path3', 'audio\\set_12\\yards_en-IN-Standard-A.wav'), ('path4', 'audio\\set_12\\bard_en-IN-Standard-A.wav'), ('word1', 'card'), ('word2', 'yard'), ('word3', 'yards'), ('word4', 'bard'), ('delay', 200)]),
      OrderedDict([('path1', 'audio\\set_12\\card_en-IN-Standard-C.wav'), ('path2', 'audio\\set_12\\yard_en-IN-Standard-C.wav'), ('path3', 'audio\\set_12\\yards_en-IN-Standard-C.wav'), ('path4', 'audio\\set_12\\bard_en-IN-Standard-C.wav'), ('word1', 'card'), ('word2', 'yard'), ('word3', 'yards'), ('word4', 'bard'), ('delay', 600)]),
      OrderedDict([('path1', 'audio\\set_12\\card_en-IN-Standard-X.wav'), ('path2', 'audio\\set_12\\yard_en-IN-Standard-X.wav'), ('path3', 'audio\\set_12\\yards_en-IN-Standard-X.wav'), ('path4', 'audio\\set_12\\bard_en-IN-Standard-X.wav'), ('word1', 'card'), ('word2', 'yard'), ('word3', 'yards'), ('word4', 'bard'), ('delay', 900)])]
    Routine trialStart
    Routine firstWord
    Routine secondWord
    Routine thirdWord
    Routine fourthWord
    Routine response
    Routine trialEnd
  LoopTerminator practiceTrial
  Routine experimentStart
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('path1', 'audio\\set_5\\bat_en-IN-Standard-A.wav'), ('path2', 'audio\\set_5\\rat_en-IN-Standard-A.wav'), ('path3', 'audio\\set_5\\sat_en-IN-Standard-A.wav'), ('path4', 'audio\\set_5\\vat_en-IN-Standard-A.wav'), ('word1', 'bat'), ('word2', 'rat'), ('word3', 'sat'), ('word4', 'vat'), ('delay', 100)]),
      OrderedDict([('path1', 'audio\\set_9\\box_en-IN-Standard-A.wav'), ('path2', 'audio\\set_9\\fox_en-IN-Standard-A.wav'), ('path3', 'audio\\set_9\\ox_en-IN-Standard-A.wav'), ('path4', 'audio\\set_9\\rocks_en-IN-Standard-A.wav'), ('word1', 'box'), ('word2', 'fox'), ('word3', 'ox'), ('word4', 'rocks'), ('delay', 250)]),
      OrderedDict([('path1', 'audio\\set_4\\race_en-IN-Standard-A.wav'), ('path2', 'audio\\set_4\\face_en-IN-Standard-A.wav'), ('path3', 'audio\\set_4\\lace_en-IN-Standard-A.wav'), ('path4', 'audio\\set_4\\pace_en-IN-Standard-A.wav'), ('word1', 'ace'), ('word2', 'face'), ('word3', 'lace'), ('word4', 'pace'), ('delay', 400)]),
      OrderedDict([('path1', 'audio\\set_2\\mood_en-IN-Standard-A.wav'), ('path2', 'audio\\set_2\\good_en-IN-Standard-A.wav'), ('path3', 'audio\\set_2\\wood_en-IN-Standard-A.wav'), ('path4', 'audio\\set_2\\brood_en-IN-Standard-A.wav'), ('word1', 'mood'), ('word2', 'good'), ('word3', 'wood'), ('word4', 'brood'), ('delay', 550)])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
    Routine trialStart
    Routine firstWord
    Routine secondWord
    Routine thirdWord
    Routine fourthWord
    Routine response
    Routine trialEnd
  LoopTerminator trials
  Routine EndScreen
